/* -*- mode: nrnhoc; tab-width: 4; indent-tabs-mode: t -*- */

/* Params.hoc
 * Declaration and initialtion of the core global parameters.
 * All other parameters are in NetworkParameters struct.
 *   
 *    Copyright © 2012 Michael Eager, (mick.eager@gmail.com)
 *
 *    This file is part of cnstellate.
 * 
 *    This is free software: you can redistribute it and/or modify
 *    it under the terms of the GNU General Public License as published by
 *    the Free Software Foundation, either version 3 of the License, or
 *    (at your option) any later version.
 *
 *    This is distributed in the hope that it will be useful,
 *    but WITHOUT ANY WARRANTY; without even the implied warranty of
 *    MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
 *    GNU General Public License for more details.
 *
 *    You should have received a copy of the GNU General Public License
 *    along with this program.  If not, see <http://www.gnu.org/licenses/>.  
 */



strdef cnstellate_dir
cnstellate_dir									= getcwd()

nchannels										= 100
HSRsperchannel									= 20
MSRsperchannel									= 0
LSRsperchannel									= 10
ANoffset										= 0.5
ANjitter										= 0.1
LSR2GLG											= 0       //Conductance=1 or Phenomenological=0  golgi model

//Indexes into cell lists and vectors use these labels
ts												= 0
tv												= 1
ds												= 2
glg												= 3
hsr												= 4
lsr												= 5

black											= 1
red												= 2
blue											= 3

/**********************************************************
**  Cell and Synapse Parameters
**********************************************************/

//Resting membrane potential
Erest				= -65

//Glutamate-AMPA Synaptic time constants
// from Gardner et al. JNeurophysiol 1999 @ 34 C degrees
// and Trussell 1998 .4-.5 at room temp
ampa_decay			= 0.36  //ms
ampa_erev			= 0     //mV

//Glycine Receptor time constants See Leao J Neurophysiol  (2004); MNTB mice neurons
// HartyManis:1998 Slice prep 30C; VCN guinea pigs
//1mM Gly-> activation time constant 0.8 to 4.6 ms, with a mean of 2.0 +/- 1.2 ms
// deactivation to 1s glycine ; 2 exponentials, tau f was 15.5 ms and tau s was 73.4 ms
// LimOleskevichEtAl:2003,AwatramaniTurecekEtAl:2005,LeaoOleskevichEtAl:2004
gly_decay			= 2.5    //ms
gly_rise			= 0.4    //ms, half width of glyc mIPSCs in MNTB is 2.3msec, rise time 0.4msec,
//normal decay time constant 5.47+/-0.19, deaf 8.01 msec  (P12-14)
//Awatramani,Tureck, Trussell J Neurophysiol (2005) Gly and GABA
//Awatramani,Tureck, Trussell J Neurosci (2004) Gly only
//MNTB rat P30 gly decay constant 2.0,
gly_erev										= -72      //see Paolini 1999

gaba_decay			= 9      //probably a combination of two time constants see AwatramaniEtAl:2005 gabaA fast 5-10 slow 20-60
gaba_rise			= 0.7
gaba_erev					=-72      // in T stellates this is more likely to be closer to RMP as
//Ferragamo et al. 1998 found no GABAergic IPSPs but the cells were still
//sensitive to bicuculine

// param.ds_gleak							= 0.0008


/*
 * AN filterbank and ANF parameters 
 */
 
cfhi					= 20000     //FilterBank upper and lower frequency (Hz)
cflo					= 200
Lowspont				= 0.5     // Auditory nerve fibre spontaneous discharge rates (sp/sec)
Medspont				= 18
Highspont			    = 50.0

totalHSR				= nchannels*HSRsperchannel
totalMSR				= nchannels*MSRsperchannel
totalLSR				= nchannels*LSRsperchannel



/****************************************
** Stimulus Parameters
****************************************/
strdef N
N			= neuronhome()
stimtype	= 1       //0 for wavdatafile,1 for tone,2 silent stim,
         //3 AM tone, 4 WB noise (obsolete)
         //5 AM noise, 6 Gaussian Noise,
         //7 Simult. Tone & Noise,
         //8 Notch, 9 Twotones, 10 Ramptone,
         //11 Clicks separated by vector 'clicktimes'
tonefreq	= 4000.0	//Hz Sinusoidal tone frequency
dur			= 0.045		//(seconds), duration of tone segment
spl			= 50		//dB SPL, sound level
reps		= 25		//repetitions used in multiple runs
dutycycle	= 0.2		//quiet duration = dutycycle*dur
ramplngth	= 0.005		//sec, 2*ramp length (1/2 on and 1/2 off)
                        //cosinesquared ramp
//total tone segment equal to  dur + 1*ramplngth
strdef wavdatafile         // extract stim data file from wav file converted to txt
wavdatafile	= "../sounds/T4000_L50.dat"
srate		= 50000.0	//Hz, Stimulus Sampling rate
stimtdres	= 1/srate	//time step (time domain resolution)
nrep		= 1			//nrep is number of reps of single stimulus in stim vector
stimdur		= 0			//ms, Stim duration set by RefreshParameters()
stimdelay	= 0.02		//sec, Delay before tone segment
AM_modfreq	= 100		//Hz
AM_depth	= 1		//% of max
Gaussmean	= 0			  // Gaussian noise mean
Gaussvar	= 1				//Gaussian noise variance
AdditiveNoise	= 0      //0=No noise added, 1= Noise added
NoiseLevel	= 0          //dB rms spl, if AdditiveNoise=1, amount of Added Noise
//Two-Tone frequency parameters
tone2freq	= 4000
tone2delay	= 0
tone2spl	= 30
//Notch Noise
stopband	=  10  //Files available are in TV_Notch folder - stopband 10,12.5
notchwidth	= 0.5		 //in octaves, 1/8,1/4,1/2,1
notchdepth	= 30
//Downsampling rate for ANF spike generator
sg_rate		= 10000
srate		= 1/stimtdres
sg_tdres	= 1/sg_rate

//Save time by using saved AN filterbank responses
usesavedfilterbanks	= 0   
strdef ANstr, ANpath,ANsoundspath
ANpath			= "../../sounds"		  //Variable string that preceeds the filename
ANsoundspath	= "../../sounds"	//Fixed local path


celsius		= 37	   //degrees, base model temperature
// celsius is a builtin variable in NEURON 
// its default value is 6.3C.  Rothman and Manis (2003) & Paul Manis'
// Neuron implementation uses 22 degrees to replicate the work in
// Rothman and Manis (2003a,b,c).  See Utilities.hoc and CNcell.tem
// for temperature conversion using qt()



// Wav file Chooser parameters
{load_file("stdlib.hoc", "String")}
objref rwl_, rwf_, sf_, tobj, box
objref ldfile
strdef tstr, rwdname, path, fname
sprint(path, "%s", getcwd())
ldfile = new File()
sf_ = new StringFunctions()
if (unix_mac_pc() == 1) {
    rwdname = "$(HOME)/.NRNWorkingDirs"
} \
else{
    rwdname = "$(NEURONHOME)/RecentWorkingDirs"
}




/**********************************************************
**  Auditory Model Simulation Parameters
**********************************************************/
//install_anmodel()         //Heinz ARLO model  see file an_arlo.mod
//install_an_tanmodel()      //Tan and Carney   see file an_tan.mod
// must change filename of '*.modx' to '*.mod' and recompile the dynamic library

execute1("install_an_zbcatmodel_v3()")   //Zilany Bruce  2006,2007
execute1("install_an_zbcatmodel_v4()")      //Zilany Bruce Nelson Carney 2009,2010

//  3 Tan+Carney 2003,
//  4 Heinz ARLO model 2001
//  6 Zilany and Bruce 2007/08, default
//  7 Zilany, Bruce, Carney, Nelson 2009,2010 
ANmodel		= 6 //default

species		= 9		   // 0	 human (as in ARLO paper)
// 9  cat, all CFs (as in JASA 2001 Zhang et al., paper)
// 1  cat, remapped to 9, [removed: only low CFs (as in Carney '93 JASA paper - not recommended)]
// 2  rat,  implemented by Michael Eager in Zilany and Bruce 2007 (6), Zilany et al. 2009,2010 (7) models

ifspike		= 1
//sout is adjusted so that instant. rate can be fed to spike generator
//not neccessary for Zilany & Bruce model or more recent

delx		= 0.05 
// "delta x", or spacing of "IHC"s along BM (linearly spaced IHCs in
// terms of location along BM results in approximately logarithmic
// spacing in terms of frequency.


/*
 *  ARLO model and Tan and Carney 2003 parameters
 *  refers to the version of the model used, as follows:
 *  Model numbers as used in ARLO Heinz et al.,2001 Fig. 4 -
 * 1: Nonlinear_w/compression & suppression (model for 'healthy' ear)
 * 2: Nonlinear_w/compression, but without off-frequency suppression
 * 3: Linear sharp
 * 4: Linear broad, low threshold
 * 5: Linear broad, high threshold
 */
ARLOModel_Params				= 1


/*
 * Bruce Model Parameters Impairment of Inner and Outer Hair cell function
 * variables cohc, cihc are frequency and animal specific See my adaptions to AN
 * mod el in Utilities.hoc 
 */ 
 strdef audiogram_file
 audiogram_file		= "rat_bruce_audiogram.dat" 
 objref audiogram,cohc,ihc

/*
 * Version 4 Parameters (ANmodel	=7)
 * Zilany et al, 2009,2010 
 */

HighSponFibre					= 3
MedSponFibre					= 2
LowSponFibre					= 1

// Implementation of the Zilany et al 2009 model:  Actual or Aproximation
ZilanyActual					= 1
ZilanyApprox					= 0
ZilanyImplmnt					= ZilanyApprox //default





/*
 * The parameter file for any experiment should look like the following section:
 * Michael Eager, University of Melbourne
 * Cochlear Nucleus network model: parameters file
 * based on parameters_odour_baseline.hoc by Andrew Davison
 */

nchannels		= 100		// Total number of frequency channels
nTSperchannel	= 10	// number of TS cells in each freq channel
numTS			= nchannels*nTSperchannel  // total number of TS cells
nTVperchannel	= 3		// number of TV cells in each freq channel
numTV			= nchannels*nTVperchannel	 // total number of TV cells
nDSperchannel	= 1		// number of DS cells in each freq channel
numDS			= nchannels*nDSperchannel	 // total number of DS cells
nGperchannel	= 1		 // number of Golgi cells in each freq channel
numG			= nchannels*nGperchannel  // total number of Golgi cells

use_seed		= 0			 //Random number generator initialise flag
seed			= 0		 // seed for random number generator see InitRandom(), note must also set use_seed for this to take effect
thresh			= -20		// mV, threshold for detecting spikes
species			 = 9
audiogram_file	=  "cat_audiogram.txt"


strdef fileroot
fileroot		= "vowel_baseline"	// default root for output filenames
vowelnumber		= 1				// which vowel

tstop			= 400			// ms, total simulation time
t_ignore_before	= 20  // ms,  when calculating statistics, ignore
// spikes occuring before this time


cvode.active(0)
dt				= 0.05	  // NEURON's integration time step
steps_per_ms	= 10	  // NEURON graphical plotting variable
setdt()
dt				= 0.1	  //repeat is necessary to change integration time step after setdt
secondorder		= 2		  //Crank-Nickolson integration, correct to second order


// Force random seed to RNG by setting this to 1
using_random_init  = 0

// Use Banks + Sachs model of Tstellate cell, set use_ball_stick to one
use_ball_stick=0

