/* -*- mode: nrnhoc; tab-width: 4; indent-tabs-mode: t -*- */

objref ivrmserror,ivpenalties,cvrmserror,cvpenalties

func TStellate3_err( ) {local jj,pp,xtime,error,penalty,sustainedrate,inputresistance,lcount,tmpreps localobj ivtemp,spikelist_temp
   error=0
   penalty=0
   objref ivrmserror,ivpenalties,cvrmserror,cvpenalties
   ivrmserror = new Vector()
   ivpenalties = new Vector()
   cvrmserror = new Vector()
   cvpenalties = new Vector()
   threshold_rate=0
   threshold_penalty = 0

   error=0
   //check for bad values
   for pp=0,NPARAMS-1 {
      if (($&2[pp] <= pvec_ranges.x[pp][0]) || ($&2[pp] > pvec_ranges.x[pp][1])) {
         return 1e9
      }
   }
   
   //print variables
   print "TStellate_err2 ", $1
   for pp=0,NPARAMS-1 { 
   printf("%s = %g * %g",pvec_name.object(pp).s,$&2[pp],pvec_factor.x[pp])
   }
   //Set the parameters (see parameters_TStellate.hoc)
   for pp=0,NPARAMS-1 {
      sprint(cmd,"%s = %g * %g ",pvec_name.object(pp).s,$&2[pp],pvec_factor.x[pp])
      execute1(cmd)
   }
   doNotify()
   flushf()
   // if (plot_variables == 1) {
   //   tgr[0].line($&2[0], $&2[1])
   //   tgr[0].flush()
   //   tgr[1].line($&2[1], $&2[2])
   //   tgr[1].flush()
   //   doNotify()
   //   print $1, $&2[0], $&2[2], $&2[3]
   // }
   
   //Reorganise model based on new parameters
   connect_TS(fileroot)
   RefreshCellParams() //refresh_TStellate()
   jitterdelay(param.delay.x[hsr][ts],param.ts_jitter_sd)
   
   doNotify()
   
   //Run CF tone  at threshold   
   spl = TSexemplar_SPL_thresh
   tmpreps = reps
   reps= 2
   RunTStellate()
   
   threshold_rate = meanrate(tstellate[whichcell][0].spikes)
   if(threshold_rate > 10.0) {
      threshold_penalty =  (threshold_rate-10)
   } 
   print "threshold rate and penalty", threshold_rate, threshold_penalty
   //penalty for spikes during tone at threshold
   reps=tmpreps
   
   objref TSIVList,TSspikeList   
   TSIVList = new List()
   TSspikeList = new List()
   
   // Calculate fitness
   objref ref_IVvec,weightvec,ref,test
   ref_IVvec = new Vector()
   weightvec = new Vector(7,1)
   ref = new Vector(7,0)
   test = new Vector(7,0)

   for (spl = TSexemplar_SPL_thresh+20; spl<= TSexemplar_SPL_thresh + 40; spl += 10){ 
      RunTStellate()
      print "TStellate3_err: saving iv ad spikes"         
      TSIVList.append(meaniv.c)
      TSspikeList.append(tstellate_spikes)
   }
   
    
   for ii=0,2 {
      test_shift = (TSIVList.object(ii).max_ind(stimdelay*1000/dt,(stimdelay*1000 + 20)/dt)/10) - 2.5   
      test = new Vector(4)
      IVMeasures(tvec,TSIVList.object(ii),test,test_shift)
      print "IV test measures "      
      test.printf
      IV_reference.object(ii).printf
      //IV comparison 
      ivrmserror.append(sqrt(IV_reference.object(ii).meansqerr(test,IV_weight.object(ii))))    
      print "IV comparison ", sqrt(IV_reference.object(ii).meansqerr(test,IV_weight.object(ii)))    
      
      PSTHcell(TSspikeList.object(ii),10,0)
      print "printprax: psthcell 10 called"   

      //Global vector cvISI manipulated by PSTHcell - bad code
      test = new Vector(4)
      test.copy(cvISI, 0, 0, 3, 1, 1)
      
      //CV comparison 
      cvrmserror.append(sqrt(CV_reference.object(ii).meansqerr(test,CV_weight.object(ii))))    
      print "CV comparison ", sqrt(CV_reference.object(ii).meansqerr(test,CV_weight.object(ii)))    
      
      
      //Calculate additional penalties
      
      //Penalty 1: Prior spikes
        
      


      //Penalty: Number of trials counted in CV 
      if(psth_checkedtrials < 0.9*reps) {
         cvpenalties.append( 10)
         print "Checked trials penalty +10 ", psth_checkedtrials 
      } else cvpenalties.append(0)

      //Penalty 1: Sustained rate 
      sustainedrate = psth.sum(2,6)/5
      if(sustainedrate < 50) {
       cvpenalties.append( sustainedrate - 50) //penalty for lack of spikes during tone
      } else cvpenalties.append(0)
      
      
      if(psth.sum(8,12)/5 > 30) {
         cvpenalties.append(psth.sum(8,12)/5 - 30) //penalty for too many spikes after tone
         print "After tone spikes ", psth.sum(8,12)/reps
      } else cvpenalties.append(0)
      
      
      //Penalty 3: CV follows criteria for chopper
      //First 10 ms must be strongly regular
      print "CV of test cell"
      cvISI.printf      
      if(cvISI.x[0] > 0.2) {   cvpenalties.append( 10+ 100*(cvISI.x[0] - 0.2)) } else cvpenalties.append(0)
      if(cvISI.x[0] > 0.3) {   cvpenalties.append( 100 + 100*(cvISI.x[0] - 0.3)) }else cvpenalties.append(0)
      if (sustained_transient_chopper == 0){
         //Sustained model   
         if(cvISI.x[1] > 0.2 || cvISI.x[1] == 0) {cvpenalties.append( 100*(cvISI.x[1] - 0.2))}else cvpenalties.append(0)
         if(cvISI.x[2] > 0.2 || cvISI.x[2] == 0) {cvpenalties.append( 100*(cvISI.x[2] - 0.2))}else cvpenalties.append(0)
         if(cvISI.x[3] > 0.2 || cvISI.x[3] == 0) {cvpenalties.append( 100*(cvISI.x[3] - 0.2))}else cvpenalties.append(0)
      } else if (sustained_transient_chopper == 1){
         //Transient 1 model
         if(cvISI.x[1] > 0.3 || cvISI.x[1] == 0) {cvpenalties.append( 10+ 100*(cvISI.x[1] - 0.3))} else cvpenalties.append(0)
         if(cvISI.x[2] > 0.3 || cvISI.x[2] == 0) {cvpenalties.append( 10+ 100*(cvISI.x[2] - 0.3))} else cvpenalties.append(0)
         if(cvISI.x[3] > 0.3 || cvISI.x[3] == 0) {cvpenalties.append( 10+ 100*(cvISI.x[3] - 0.3))} else cvpenalties.append(0)
      } else if (sustained_transient_chopper == 2){
         //Transient 1 model
         if(cvISI.x[1] < 0.3) {cvpenalties.append( 10+ 100*(0.3 - cvISI.x[1])) } else cvpenalties.append(0)
         if(cvISI.x[2] < 0.3) {cvpenalties.append( 10+ 100*(0.3 - cvISI.x[2]))} else cvpenalties.append(0)
         if(cvISI.x[3] < 0.3) {cvpenalties.append( 10+ 100*(0.3 - cvISI.x[3]))  } else cvpenalties.append(0)
         if(cvISI.x[1] > 0.5) {cvpenalties.append( 10+ 100*(cvISI.x[1] - 0.5))} else cvpenalties.append(0)
         if(cvISI.x[2] > 0.5) {cvpenalties.append( 10+ 100*(cvISI.x[2] - 0.5))} else cvpenalties.append(0)
         if(cvISI.x[3] > 0.5) {cvpenalties.append( 10+ 100*(cvISI.x[3] - 0.5))  } else cvpenalties.append(0)
      }
      
        
   }//ii  for loop
   
   //Penalty 4: Input resistance must be within physiological range
   access tstellate[whichcell][0].soma 
   inputresistance = rn() //Calculate input resistance, see Utilities.hoc   
   if(inputresistance < 30 || inputresistance > 400) ivpenalties.append(100)
   
   print "Penalties size ", ivpenalties.size(), cvpenalties.size()
   print "Penalties sum ", ivpenalties.sum(), cvpenalties.sum()   
   ivpenalties.printf
   cvpenalties.printf
   print " CV RMS "
   cvrmserror.printf
   print " IV RMS "
   ivrmserror.printf
   error = ivrmserror.sum() +  cvrmserror.sum() + ivpenalties.sum() + cvpenalties.sum()
   
   sprint(fname,"%s/error_out.dat",fileroot)
   file.aopen(fname)
   for pp=0,NPARAMS-1 {
      file.printf("%g\t",$&2[pp]*pvec_factor.x[pp])
   }
   file.printf("%g\n",error)
   file.close()
   
   doNotify()
   return error
}

error=0
proc printprax2(){
   //Output model data with best parameters
   sprint(cmd,"mkdir -p %s",fileroot)
   system(cmd)
   print error=TStellate3_err(0,&pvec.x[0])
   //printprax()
  xopen("printprax.hoc")  //Quick fix while debugging printprax()

}

TSexemplar_SPL_thresh=20
objref praxfile
proc printprax(){local i_window,pp,ispl,pp2 
   set_datestr()
   sprint(fname,"%s/%s.Fit.dat",fileroot,origfileroot)
   praxfile = new File()
   praxfile.wopen(fname)
   if (praxfile.isopen()){
      praxfile.printf("# %s Optimisation\n",fileroot)
      praxfile.printf("# %s \n",datestr)
      for pp=0,NPARAMS-1 {
         praxfile.printf("#%s = %g\t[%g,%g]\n",pvec_name.object(pp).s,pvec.x[pp]*pvec_factor.x[pp],pvec_ranges.x[pp][0],pvec_ranges.x[pp][1])
      }
      praxfile.printf("# final error=%f\n",error)
      //praxfile.printf("# Principle axis matrix\n")
      //for pp=0,NPARAMS-1 {
      //pval[pp] = new Vector(NPARAMS)
      //pval_praxis(pp,&pval[pp].x[0])
      //praxfile.printf("#\t")
      //for pp2=0,NPARAMS-1 praxfile.printf("%g\t",pval[pp].x[pp2])
      //praxfile.printf("\n")
      //}
      praxfile.printf("# Threshold level %g \n", TSexemplar_SPL_thresh )
      praxfile.printf("# Threshold rate %g \n", threshold_rate)
      praxfile.printf("# TS exemplar RMP %g\n", TSexemplar_RMP )
      praxfile.printf("# TS exemplar CF %g\n",TSexemplar_CF)
      praxfile.printf("# CV RMS errors:\t")
      cvrmserror.printf("%.4g\t")
      praxfile.printf("\n# Penalties :\t")
      cvpenalties.printf("%.4g\t")
      praxfile.printf("\n")
      praxfile.printf("# IV RMS errors:\t")
      ivrmserror.printf("%.4g\t")
      praxfile.printf("\n# IV Penalties :\t")
      ivpenalties.printf("%.4g\t")
      praxfile.printf("\n")
      praxfile.printf("# Final Error  %g   %g\n",error, ivrmserror.sum() +  cvrmserror.sum() + ivpenalties.sum() + cvpenalties.sum())
      flushf()
      
      praxfile.printf("# Time\t IV @spl=20 (mV)\t IV @spl=30 (mV)\t IV @spl=40 (mV)\n")
      for ispl=0,tvec.size()-1 {
         praxfile.printf("%.2f\t%.6f\t%.6f\t%.6f\n",tvec.x[ispl],TSIVList.object(0).x[ispl],TSIVList.object(1).x[ispl],TSIVList.object(2).x[ispl])
      }
      print "Writing tones to file..."
      for ispl=0,2 {
      doNotify()
         test_shift = (TSIVList.object(ispl).max_ind(stimdelay*1000/dt,(stimdelay*1000 +20)/dt)/10) - 2.5
         test = new Vector(4)
         IVMeasures(tvec,TSIVList.object(ispl),test,test_shift)   
         praxfile.printf("# IV Measures at spl %d\n",TSexemplar_SPL_thresh+ 20+ ispl*10 )
         praxfile.printf("# RMP \t%g\t%g \n", IV_reference.object(ispl).x[3], test.x[3])
         praxfile.printf("# IVshift\t%g\n", test_shift)
         praxfile.printf("# IVOnset\t%g\t%g\n", IV_reference.object(ispl).x[0], test.x[0])
         praxfile.printf("# IVAdaptation\t%g\t%g\n", IV_reference.object(ispl).x[1], test.x[1])
         praxfile.printf("# IVOffset\t%g\t%g\n", IV_reference.object(ispl).x[2],test.x[2])  
         praxfile.printf("# IV Measures RMS error \t%g\n", sqrt(IV_reference.object(ispl).meansqerr(test,IV_weight.object(ispl))))
         praxfile.printf("# IV RMS Error: \t %g\n ",ivrmserror.x[ispl]) 
         praxfile.printf("\n")
         //IV comparison 
         
         PSTHcell(TSspikeList.object(ispl),10,0)
	 print "printprax: Calc psth and stats, tone  ", ispl   

         praxfile.printf("#PSTH: Time\t Rate (sp/s)\n")
         for i_window=0,psth.size()-1 {
            praxfile.printf("# %d\t%.6f\n",i_window,psth.x[i_window])
         }
         praxfile.printf("#CV: Time\t CV ()\t\t ISI mean (ms)\t\t ISI sd (ms) \n")
         for i_window=0,4 {
            praxfile.printf("# %d\t%.6f\t%.6f\t%.6f\n",i_window,cvISI.x[i_window], uISI.x[i_window],sISI.x[i_window])
         }
         test = new Vector(4)
         test.copy(cvISI, 0, 0, 3, 1, 1)
         praxfile.printf("#CV: Time\t CV reference\t\t CV test ()\t Weighting \n")
         for i_window=0,test.size()-1 {
            praxfile.printf("# %d\t%.6f\t%.6f\t%.6f\n",i_window,test.x[i_window], CV_reference.object(ispl).x[i_window], CV_weight.object(ispl).x[i_window])
         }
         praxfile.printf("# CV RMS Error \t%g\n ",cvrmserror.x[ispl]) 

         //IV comparison 
         print error+=sqrt(CV_reference.object(ispl).meansqerr(test,CV_weight.object(ispl)))      
         praxfile.printf("# CV Measures RMS error \t%g\n", penalty)
         praxfile.printf("#   FSL Mean %g, Std Dev %g \n",  fslmean,fslstd)         
         //Calculate additional penalties
         doNotify()
         flushf()         
         //Penalty: Number of trials counted in CV 
         praxfile.printf("# Checked trials \t%g\n", psth_checkedtrials)

         
         //Penalty 1: Sustained rate 
         sustainedrate = psth.sum(2,6)/reps
         praxfile.printf("# Sustained rate \t%g\n", sustainedrate)
         
         if (ispl > 1)   {
            //penalty for lack of spikes during tone
            if(sustainedrate < 10) penalty = 10 - sustainedrate 
            praxfile.printf("# Sustained rate penalty \t%g\n", penalty)
         }
         //penalty for too many spikes after tone
         if(psth.sum(8,12)/reps > 10) penalty = psth.sum(8,12)/reps - 10 
         praxfile.printf("# Post stimulus rate penalty \t%g\n", penalty)
         
         //Penalty 3: CV follows criteria for chopper
         //First 10 ms must be strongly regular
         penalty=0
        
         praxfile.printf("\n")
      }//ispl  for loop
      
      //Penalty 4: Input resistance must be within physiological range
      access tstellate[whichcell][0].soma 
      inputresistance = rn() //Calculate input resistance, see Utilities.hoc   
      if(inputresistance < 30 || inputresistance > 400) penalty = 100
      praxfile.printf("#  Input Resistance = %g\n",inputresistance)
      praxfile.printf("#  Input Resistance Penalty = %g\n",penalty)
      praxfile.printf("#  tonefreq = %g\n",tonefreq)
      param.print2file(praxfile,"#") //let Network Parameters print the struct
      
      praxfile.close()
   }
   //Write parameters to general optimisation file
   sprint(fname,"%s/pvec_%s.hoc",fileroot,origfileroot)
   praxfile.aopen(fname)
   if (praxfile.isopen()){
      praxfile.printf(" // %s  \n",datestr)
      for pp=0,NPARAMS-1 {
         praxfile.printf("%s = %g*%g\n",pvec_name.object(pp).s,pvec.x[pp],pvec_factor.x[pp])
      }
      praxfile.printf("\n")
      praxfile.close()
   }
   doNotify()
   flushf()
   print "printprax: pvec_* file written"
   PSTHcell(TSspikeList.object(1),10,2)
   print "printprax: psth_10 file written"   
   PSTHcell(TSspikeList.object(1),1,2)
   print "printprax: psth_1 file written"
   PSTHcell(TSspikeList.object(1),0.25,2)
   print "printprax: psth_0.25 file written"
}
