/* -*- mode: nrnhoc; tab-width: 4; indent-tabs-mode: t -*- */



load_file("nrngui.hoc")
load_file("par_netpar.hoc")
load_file("par_init.hoc")


//nrn_load_dll("ia64/.libs/libnrnmech.so")

//setuptime = startsw()
run_experiment("SAM")
//setuptime = startsw() - setuptime
//printf("setup time %g\n",setuptime)

/*
pnm.want_all_spikes()
pnm.set_maxstep(100)

objref mxhist
if (pnm.myid == 0) {
   mxhist = new Vector(25)
   pnm.pc.max_histogram(mxhist)
}

load_file("perfrun.hoc")

if (name_declared("mosinit")) {
        print "setuptime ", setuptime
        stop
}



prun()

pnm.pc.runworker

print_results()

pnm.prstat(1)
pnm.gatherspikes()
getstat()
pnm.pc.done


spike2file()
perf2file()

for i=0, mxhist.size-1 {
   printf("%d\t %d\n", i, mxhist.x[i])
}

printf("setuptime=%g   runtime=%g\n", setuptime, runtime)

*/
//quit()
