/* -*- mode: nrnhoc; tab-width: 4; indent-tabs-mode: t -*- */

/* 
 *   
 *    Copyright © 2012 Michael Eager, (mick.eager@gmail.com)
 *    cnstellate was written as part of my PhD at the University of Melbourne
 *
 *    This file is part of cnstellate.
 * 
 *    This is free software: you can redistribute it and/or modify
 *    it under the terms of the GNU General Public License as published by
 *    the Free Software Foundation, either version 3 of the License, or
 *    (at your option) any later version.
 *
 *    This is distributed in the hope that it will be useful,
 *    but WITHOUT ANY WARRANTY; without even the implied warranty of
 *    MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
 *    GNU General Public License for more details.
 *
 *    You should have received a copy of the GNU General Public License
 *    along with this program.  If not, see <http://www.gnu.org/licenses/>.  
 */


objref file
file = new File()

//Spirou et al 1999
//Figure 8: Effects of strychnine and bicuculline iontophoresis on rate-level
// curves. Legend in B identifies the conditions for each rate-level plot. A: type
// II unit studied before and during strychnine and bicuculline. Leftmost 3
// rate-level curves: BF tones, rightmost 3: for noise. Note the control noise
// response is essentially 0. B: type I/III unit studied before and during
// strychnine. Sponta- neous activity did not develop in either unit during
// iontophoresis. C: plot of relative noise response before (abscissa) versus
// during (ordinate) application of inhibitory antagonist. Antagonist is identified
// by the symbols, defined in the legend. Diagonal line shows equality of relative
// noise responses and the vertical dashed line separates type II from type I/III
// units at a relative noise response of 0.35.

// objref SpirouFig8B_wStr_Tone, SpirouFig8B_Control_Tone, SpirouFig8B_Control_Noise,SpirouFig8B_wStr_Tone, SpirouFig8B_wStr_Noise
// SpirouFig8B_Control_Tone = new Matrix()
// SpirouFig8B_Control_Noise = new Matrix()
// SpirouFig8B_wStr_Tone = new Matrix()
// SpirouFig8B_wStr_Noise  = new Matrix()

// file.ropen("TV_RateLevel/Spirou-Fig8B-RL-withStry-Control-Tone-Noise.png.dat")
// SpirouFig8B_wStr_Tone.scanf(file,32,2)
// SpirouFig8B_Control_Tone.scanf(file,22,2)
// SpirouFig8B_wStr_Noise.scanf(file,24,2)
// SpirouFig8B_Control_Noise.scanf(file,18,2) 
// file.close()

objref SpirouFig8A_wStr_Tone, SpirouFig8A_Control_Tone, SpirouFig8A_Control_Noise,SpirouFig8A_wStr_Tone, SpirouFig8A_wStr_Noise, SpirouFig8A_wBic_Tone, SpirouFig8A_wBic_Noise
SpirouFig8A_Control_Tone = new Matrix()
SpirouFig8A_Control_Noise = new Matrix()
SpirouFig8A_wStr_Tone = new Matrix()
SpirouFig8A_wStr_Noise  = new Matrix()
SpirouFig8A_wBic_Tone = new Matrix()
SpirouFig8A_wBic_Noise  = new Matrix()


   //$ wc -l TV_RateLevel/Spirou-Fig8A*.dat
   // 30 TV_RateLevel/Spirou-Fig8A-RL-Control-BFTone.png.dat
   // 19 TV_RateLevel/Spirou-Fig8A-RL-Control-Noise.png.dat
   // 48 TV_RateLevel/Spirou-Fig8A-RL-withBic-BFTone.png.dat
   // 20 TV_RateLevel/Spirou-Fig8A-RL-withBic-Noise.png.dat
   // 39 TV_RateLevel/Spirou-Fig8A-RL-withStrych-BFTone.png.dat
   // 18 TV_RateLevel/Spirou-Fig8A-RL-withStrych-Noise.png.dat


file.ropen("TV_RateLevel/Spirou-Fig8A-RL-withStrych-BFTone.png.dat")
if (file.isopen()) SpirouFig8A_wStr_Tone.scanf(file,39,2)
file.close()
file.ropen("TV_RateLevel/Spirou-Fig8A-RL-Control-BFTone.png.dat")
if (file.isopen()) SpirouFig8A_Control_Tone.scanf(file,30,2)
file.close()
file.ropen("TV_RateLevel/Spirou-Fig8A-RL-withStrych-Noise.png.dat")
if (file.isopen()) SpirouFig8A_wStr_Noise.scanf(file,18,2)
file.close()
file.ropen("TV_RateLevel/Spirou-Fig8A-RL-Control-Noise.png.dat")
if (file.isopen()) SpirouFig8A_Control_Noise.scanf(file,19,2) 
file.close()
file.ropen("TV_RateLevel/Spirou-Fig8A-RL-withBic-BFTone.png.dat")
if (file.isopen()) SpirouFig8A_wBic_Tone.scanf(file,48,2)
file.close()
file.ropen("TV_RateLevel/Spirou-Fig8A-RL-withBic-Noise.png.dat")
if (file.isopen()) SpirouFig8A_wBic_Noise.scanf(file,20,2)
file.close()


proc TV_Noise_Setup(){
	
	stimtype = 6    //Broad-band Noise 
	
}



// Target RL data
objref tmp_rate_level, level, tvrate[nchannels], tvrate[nchannels], \
dsrate[nchannels],grate[nchannels], hsrrate[nchannels],lsrrate[nchannels]

/// Save rate-level values to file
proc save_rate_level(){
	sprint(fname,"%s/rate_level.dat",fileroot)
	file.aopen(fname)
	for i=0,level.size-1{
		file.printf("%d\t%g\t%g\t%g\t%g\t%g\t%g\n",level.x[i],\
		tvrate[0].x[i],tvrate[1].x[i],\
		dsrate[whichcell].x[i],grate[whichcell].x[i], \
		hsrrate[whichcell].x[i],lsrrate[whichcell].x[i])			
	}
	file.close()
}	

//Note the level vector must be set prior to calling this function 
obfunc set_target_rate_level(){localobj xdata,ydata
	if (level.size == 0) {
print "Error setting data"
return tmp_rate_level
	}
	if ( object_id($o1) && $o1.nrow >= 2 && $o1.ncol >= 2){
	xdata = $o1.getcol(0).add(100)  //0dBA in data ~ 100dB SPL
	ydata = $o1.getcol(1)
	tmp_rate_level = new Vector()
	tmp_rate_level.interpolate(level,xdata,ydata)
	} else {
	print "Error interpolating data"
	}
return tmp_rate_level
	
}


proc reset_TV_RateLevel(){local i,j
	
	for i=0,nchannels -1 {
		for j=0,nTVperchannel-1{
  			tuberculoventral[i][j].soma.erev_rm = param.tv_erev
		}
	}
}


