/* -*- mode: nrnhoc; tab-width: 4; indent-tabs-mode: t -*- */




// Params.hoc
// Cochlear Nucleus network model: parameters file
// based on parameters_odour_baseline.hoc by Andrew Davison
// Michael Eager, University of Melbourne

nchannels       = 100		        // Total number of frequency channels
nTSperchannel   = 1	                // number of TS cells in each freq channel
numTS	= nchannels*nTSperchannel	// total number of TS cells
nTVperchannel   = 1	                // number of TV cells in each freq channel
numTV	= nchannels*nTVperchannel	// total number of TV cells
nDSperchannel   = 1	                // number of DS cells in each freq channel
numDS	= nchannels*nDSperchannel	// total number of DS cells
nGperchannel	= 1	                // number of Golgi cells in each freq channel
numG	= nchannels*nGperchannel	// total number of Golgi cells
HSRsperchannel  =   100
MSRsperchannel  =   0
LSRsperchannel  =   100
seed        = 0			// seed for random number generator
thresh      = -10       // mV threshold for detecting spikes


strdef fileroot
sprint(fileroot,"golgi_Ratelevel") // root for output filenames
//system("mkdir golgi_Ratelevel")	
inputnumber = 1			// fixed input file
tstop	    = 400	// ms	// total simulation time
ttrans	    = 10	// ms   // when calculating statistics, ignore
				// spikes occuring before this time
cvode.active(0)
dt 	    = 0.05	//ms
steps_per_ms = 10
setdt()
celsius = 37
secondorder=2

	count = 0
	tonefreq = 8489
	dur 		= 0.049 	//duration of tone segment (seconds)
	
	dutycycle 	= 0.2		//quiet duration = dutycycle*dur
	ramplngth 	= 0.001
	srate 		= 500000.0  
	stimtdres 	= 1/srate
	sg_rate = 50000		
	sg_tdres = 1/sg_rate
	stimdelay 	= 0.02		//sec
	stimtype=1	//tone
	reps=25



